PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'skipIntro': 'False', 'startRound': '1', 'startLoopPos': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Experiment
  eyetracker = Tobii Technology
  tbModel = Tobii Pro Spectrum
  tbSampleRate = 1200
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Routines
  Routine trial
  Routine SelectLang
    ButtonComponent button_english
      bold = True
      callback = movie.loadMovie("sample-5s.mp4")
      disabled = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, 0)
      size = [0.5, 0.2]
      startVal [time (s)] = 0
      text = English
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    ButtonComponent button_german
      bold = True
      callback = movie.loadMovie("sample-10s.mp4")
      disabled = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.5, 0)
      size = [0.5, 0.2]
      startVal [time (s)] = 0
      text = German
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  Routine start
    TextComponent start_experiment
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This was the example.
        If you have any questions, please contact the experimental manager.
        Otherwise, press „Enter“ to start the study.
        First comes the calibration.
        Please remember to sit as unmoving as possible.
    KeyboardComponent space_start
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine startEvent
    ParallelOutComponent experiment_start_event
      address = 0x0378
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Snippet
    ImageComponent Background
      image = dummy.png
      size = (0.8, 0.55)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 30.0
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    EyetrackerRecordComponent etRecord
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 35
      syncScreenRefresh = False
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    ImageComponent image
      image [set every repeat] = $"images/" + ImagePath
      size = (0.75, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 30
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    KeyboardComponent skip
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 27
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    ParallelOutComponent snippet_start_event
      address = 0x0378
      startData = start_event
      startVal [condition] = image.status == STARTED
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        from datetime import datetime
        import datetime as dt
        from psychopy import core
        df_stimuli = pd.DataFrame([], columns=["stimuli", "startTime", "endTime"])
        df_answer = pd.DataFrame([], columns=["task", "answer", "correctness"])
        df_eval = pd.DataFrame([], columns=["task", "difficulty"])
        df_et = pd.DataFrame([], columns=["time", "position", "left_pupil_diameter", "right_pupil_diameter", "stimuli"])

        folder_name = f"./data/test"
        # Check if the directory exists
        if not os.path.exists(folder_name):
            os.makedirs(folder_name)

        start_time = datetime.now()
        end_of_stimuli = None
      Begin Routine:
        snippet = snippet + 1
        skipSnippet = False
        continueRoutine = True
        if ((snippet < int(expInfo['startLoopPos'])) and (Round == int(expInfo['startRound']))):
            skipSnippet = True
            continueRoutine = False
        current_time = datetime.now()
        start_of_stimuli = dt.timedelta(seconds=0)
        end_of_stimuli = dt.timedelta(seconds=0)
        current_stimuli = "fixation_cross"
        first_frame = True
        ioServer.sendMessageEvent("Fixation " + SnippetName, category = "FIXATION", sec_time = ioServer.getTime())
      Each Frame:
        if (first_frame and image.status == STARTED):
            ioServer.sendMessageEvent("Start Snippet " + SnippetName, category = "SNIPPETVIEW", sec_time = ioServer.getTime())
            first_frame = False
        current_time = datetime.now()
        since_start = current_time - start_time
        if image.status == STARTED and start_of_stimuli == dt.timedelta(seconds=0):
            start_of_stimuli = since_start
            current_stimuli = SnippetName

        sample_data = etRecord.tracker.getLastSample()

        left_pupil_diameter = 0
        right_pupil_diameter = 0

        #if sample_data is not None:
        #    left_pupil_diameter = sample_data[21]
        #    right_pupil_diameter = sample_data[40]

        df_et.loc[len(df_et)] = [since_start, etRecord.pos, left_pupil_diameter, right_pupil_diameter, current_stimuli]
      End Experiment:
        df_stimuli.to_csv(f"{folder_name}/Stimuli_Times.csv")
        df_answer.to_csv(f"{folder_name}/Task_Answers.csv")
        df_eval.to_csv(f"{folder_name}/Task_Eval.csv")
        df_et.to_csv(f"{folder_name}/et.csv")
      End Routine:
        end_of_stimuli = current_time - start_time
        df_stimuli.loc[len(df_stimuli)] = [SnippetName, start_of_stimuli, end_of_stimuli]
        ioServer.sendMessageEvent("End Snippet " + SnippetName, category = "SNIPPETVIEW", sec_time = ioServer.getTime())
    KeyboardComponent force_skip
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 34.9
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    ParallelOutComponent p_port_2
      address = 0x0378
      startData = 3
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    PolygonComponent circle
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent fixation_cross_2
      fillColor = white
      lineWidth = 10
      ori = 90
      shape = line
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent fixation_cross
      fillColor = white
      lineWidth = 10
      shape = line
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent small_circle
      fillColor = black
      lineColor = black
      shape = circle
      size = (8, 8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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  Routine Question
    TextComponent question
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = What is the final value in R at the end of the code snippet?
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    KeyboardComponent key_resp
      allowedKeys = 'end','down','pagedown', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 59.9
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    SliderComponent three_answers
      borderColor = 0.3255, 0.3255, 0.3255
      forceEndRoutine = False
      granularity = 1
      labels = 'placeholder_1','placeholder_2','placeholder_3','placeholder_4'
      letterHeight = 0.05
      size = (0.9, 0.02)
      startVal [condition] = answer3 != "EMPTY"
      stopVal [duration (s)] = 60
      styles = radio
      ticks = (1, 2, 3, 4)
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        answer = None
        if skipSnippet:
            continueRoutine = False
        if answer3 == "EMPTY":
            labels = [answer1, answer2, "I'm not \nsure"]
            for i, obj in enumerate(two_answers.labelObjs):
                obj.text = two_answers.labels[i] = labels[i]
            key_image_3.opacity = 0

        else:
            labels = [answer1, answer2, answer3, "I'm not \nsure"]
            for i, obj in enumerate(three_answers.labelObjs):
                obj.text = three_answers.labels[i] = labels[i]
            key_image_3.opacity = 1
      End Routine:
        if key_resp.keys is None:
            answer = "no Answer"
        else:
            if key_resp.keys == 'end':
                answer = str(answer1)

            if key_resp.keys == 'down':
                answer = str(answer2)

            if key_resp.keys == 'pagedown':
                answer = str(answer3)

            if key_resp.keys == 'enter':
                answer = "skip"

        correctness = "not_answered"
        if answer is not None:
            correctness = str(answer == str(correct))
            df_answer.loc[len(df_answer)] = [SnippetName, answer, correctness]
            continueRoutine = False


        ioServer.sendMessageEvent("Answer " + str(SnippetName) + " " + str(answer) + " " + str(correctness), category = "ANSWER", sec_time = ioServer.getTime())
    SliderComponent two_answers
      borderColor = 0.3255, 0.3255, 0.3255
      forceEndRoutine = False
      granularity = 1
      labels = 'placeholder_1','placeholder_2','placeholder_3'
      letterHeight = 0.05
      size = (0.9, 0.02)
      startVal [condition] = answer3 == "EMPTY"
      stopVal [duration (s)] = 60
      styles = radio
      ticks = (1, 2, 4)
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    ParallelOutComponent p_port
      address = 0x0378
      startData = 4
      startVal [condition] = question.status == STARTED
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = True
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    ImageComponent key_image_1
      image = key_1.png
      pos = (-0.45, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent key_image_2
      image = key_2.png
      pos = (-0.15, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent key_image_3
      image = key_3.png
      pos = (0.15, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent key_image_enter
      image = key_enter.png
      pos = (0.45, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine Difficulty
    TextComponent difficulty
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = How difficult was it for you to understand the code snippet and calculate the final value in R?
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    KeyboardComponent key_resp_2
      allowedKeys = 'end','down','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 59.9
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    SliderComponent answers_2
      borderColor = 0.3255, 0.3255, 0.3255
      forceEndRoutine = False
      granularity = 1
      labels = "easy", "hard", "I'm not \nsure"
      letterHeight = 0.05
      size = (0.9, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      styles = radio
      ticks = (1, 2, 4)
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if skipSnippet:
            continueRoutine = False
        answer = None
      Each Frame:

        #if key_resp_2.keys == 'r':
        #    answers_2.recordRating(4)
        #    answer = "skip"
      End Routine:
        if key_resp.keys is None:
            answer = "no Answer"
        else:
            if key_resp_2.keys == 'end':
                answers_2.recordRating(1)
                answer = "easy"

            if key_resp_2.keys == 'down':
                answers_2.recordRating(2)
                answer = "hard"

            if key_resp_2.keys == 'enter':
                answers_2.recordRating(3)
                answer = "skip"


        if answer is not None:
            df_eval.loc[len(df_eval)] = [SnippetName, answer]
            continueRoutine = False


        ioServer.sendMessageEvent("Perception " + str(SnippetName) + " " + str(answer), category = "PERCEPTION", sec_time = ioServer.getTime())
    ImageComponent key_image_1_2
      image = key_1.png
      pos = (-0.45, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent key_image_2_2
      image = key_2.png
      pos = (-0.15, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent key_image_enter_2
      image = key_enter.png
      pos = (0.45, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine Pause
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_length
      text [set every repeat] = $"Short break\n" + str(break_length) + " seconds"
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    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 5
      stopVal [duration (s)] = $break_length-5
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        if trials.thisN+1 == trials.nTotal or skipSnippet:
            continueRoutine = False
  Routine Long_Pause
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Long break
        Now you can have a longer break.
        You can move your arms and legs and have a drink or snack.
        Please ring the bell and let us know.
    KeyboardComponent key_resp_10
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 120
      stopVal [duration (s)] = 180
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    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        since_start = datetime.now()
        if ((Round == 3) or (Round < int(expInfo['startRound']))):
            continueRoutine = False
        if trials.thisN+1 == trials.nTotal:
            continueRoutine = False
      Each Frame:
        #current_time = datetime.now()
        #time_elapsed = current_time - since_start
        #td = dt.timedelta(seconds=300) - time_elapsed

        #td_str = ""
        #if td.days:
        #   td_str += f"{td.days}d"
        #if td.seconds // 3600:
        #    td_str += f"{td.seconds // 3600}h"
        #if td.seconds % 3600 // 60:
        #    td_str += f"{td.seconds % 3600 // 60}m"
        #if td.seconds % 60:
        #    td_str += f"{td.seconds % 60}s"
        #if td_str == "":
        #    td_str = f"0s"

        #break_text = ""
        #break_text = "Break" + "\n" + td_str + " left"  + "\n \n" + "Press Return to skip"
        #text_4.setText(break_text)
    KeyboardComponent key_resp_14
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 299.9
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    ParallelOutComponent pause_start
      address = 0x0378
      startData = 2
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent pause_ende
      address = 0x0378
      startData = 1
      startVal [condition] = end_of_stimuli != None
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine EEG_Start
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Please start the EEG recording now if it hasn't started already.
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    KeyboardComponent key_resp_15
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 29.9
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  Routine EEG_End
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Please end the EEG recording now if it hasn't ended already.
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    ParallelOutComponent end_eeg
      address = 0x0378
      startData = 2
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    KeyboardComponent force_skip_7
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 9.5
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  Routine Difficulty_2
    TextComponent difficulty_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = How difficult was it for you to calculate the output of the code?
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    KeyboardComponent key_resp_6
      allowedKeys = 'end','down','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 19.9
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    SliderComponent answers
      borderColor = 0.3255, 0.3255, 0.3255
      forceEndRoutine = False
      granularity = 1
      labels = "easy", "hard", "I'm not \nsure"
      letterHeight = 0.05
      size = (0.5, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      styles = radio
      ticks = (1, 2, 4)
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        answer = None
      Each Frame:

        #if key_resp_2.keys == 'r':
        #    answers_2.recordRating(4)
        #    answer = "skip"
      End Routine:
        if key_resp_6.keys == 'end':
            answers.recordRating(1)
            answer = "easy"

        if key_resp_6.keys == 'down':
            answers.recordRating(2)
            answer = "hard"

        if key_resp_6.keys == 'enter':
            answers.recordRating(3)
            answer = "skip"


        if answer is not None:
            df_eval.loc[len(df_eval)] = [SnippetName, answer]
            continueRoutine = False


        ioServer.sendMessageEvent("Perception " + str(SnippetName) + " " + str(answer), category = "PERCEPTION", sec_time = ioServer.getTime())
  Routine Difficulty_3
    TextComponent difficulty_3
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = How difficult was it for you to calculate the output of the code?
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    KeyboardComponent key_resp_7
      allowedKeys = 'end','down','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 19.9
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    SliderComponent answers_3
      borderColor = 0.3255, 0.3255, 0.3255
      forceEndRoutine = False
      granularity = 1
      labels = "easy", "hard", "I'm not \nsure"
      letterHeight = 0.05
      size = (0.5, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      styles = radio
      ticks = (1, 2, 4)
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        answer = None
      Each Frame:

        #if key_resp_2.keys == 'r':
        #    answers_2.recordRating(4)
        #    answer = "skip"
      End Routine:
        if key_resp_7.keys == 'end':
            answers_3.recordRating(1)
            answer = "easy"

        if key_resp_7.keys == 'down':
            answers_3.recordRating(2)
            answer = "hard"

        if key_resp_7.keys == 'enter':
            answers_3.recordRating(3)
            answer = "skip"


        if answer is not None:
            df_eval.loc[len(df_eval)] = [SnippetName, answer]
            continueRoutine = False


        ioServer.sendMessageEvent("Perception " + str(SnippetName) + " " + str(answer), category = "PERCEPTION", sec_time = ioServer.getTime())
  Routine Example_Begin
    TextComponent Example_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Now, we will navigate you through a task example.
        This trial is not part of the actual study.
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 10
      text = First, look at the fixation cross to calibrate your eye movement and normalize your brain activity.
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    KeyboardComponent force_skip_5
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 19.9
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  Routine Example_Snippet
    ImageComponent Background_4
      image = dummy.png
      size = (0.8, 0.55)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 30.0
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    EyetrackerRecordComponent etRecord_4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 50
      syncScreenRefresh = False
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    ImageComponent image_5
      image [set every repeat] = images\example\25-clean.png
      size = (0.75, 0.5)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 30
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    KeyboardComponent skip_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 23
      stopVal [duration (s)] = 27
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    KeyboardComponent force_skip_4
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 49.9
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    TextComponent Snippet_text
      letterHeight = 0.05
      startVal [time (s)] = 5
      stopVal [duration (s)] = 15
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      text:
        Then, read the presented Java code snippet and determine the value of R at the end of the snippet.
        You have 30 seconds to read the code.
        If you have finished early, you can click "Enter" to continue before the timeout.
    PolygonComponent circle_1
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent fixation_cross_10
      fillColor = white
      lineWidth = 10
      ori = 90
      shape = line
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent fixation_cross_9
      fillColor = white
      lineWidth = 10
      shape = line
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent small_circle_2
      fillColor = black
      lineColor = black
      shape = circle
      size = (8, 8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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  Routine Example_Question
    TextComponent question_4
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Now answer the following question:
        What is the final value in R at the end of the code snippet?
    KeyboardComponent key_resp_12
      allowedKeys = 'end','down', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 59.9
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    SliderComponent two_answers_4
      borderColor = 0.3255, 0.3255, 0.3255
      forceEndRoutine = False
      granularity = 1
      labels = '1','2', '3', "I'm not sure"
      letterHeight = 0.05
      size = (0.9, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      styles = radio
      ticks = (1, 2, 3, 4)
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    ImageComponent key_image
      image = key_1.png
      pos = (-0.45, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent key_image_4
      image = key_2.png
      pos = (-0.15, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent key_image_5
      image = key_3.png
      pos = (0.15, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent key_image_enter_3
      image = key_enter.png
      pos = (0.45, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine Example_Difficulty
    TextComponent difficulty_4
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Now answer the following question:
        How difficult was it for you to understand the code snippet and calculate the final value of R?
    KeyboardComponent key_resp_13
      allowedKeys = 'end','down','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 59.9
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    SliderComponent answers_4
      borderColor = 0.3255, 0.3255, 0.3255
      forceEndRoutine = False
      granularity = 1
      labels = "easy", "hard", "I'm not \nsure"
      letterHeight = 0.05
      size = (0.9, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      styles = radio
      ticks = (1, 2, 4)
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    ImageComponent key_image_1_3
      image = key_1.png
      pos = (-0.45, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent key_image_2_3
      image = key_2.png
      pos = (-0.15, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent key_image_enter_4
      image = key_enter.png
      pos = (0.45, 0.05)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine End_Study
    TextComponent End_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Now the experiment is finished. Please notify the experimental manager that you have finished the study. Thank you for your participation!
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    KeyboardComponent force_skip_6
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 19.9
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  Routine IntroText
    TextComponent Intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the study!
        Press "Enter" to continue
    KeyboardComponent key_resp_17
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent comments
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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      text:
        disabled all eeg ports as not used
        including: startEvent, EEG End, Snippet, Rating, Long Pause
  Routine Presentation
    KeyboardComponent force_skip_movie
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    ImageComponent image_2
      image [set every repeat] = $"Study Intro Snapshots/"+ Image + ".png"
      size = (1.778, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = $min_duration
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  Routine photo
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Photo
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    KeyboardComponent force_skip_8
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 9.9
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  Routine CheckPos
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        skip_iter = False
        snippet = 0
        if Round < int(expInfo['startRound']):
                continueRoutine = False
                skip_iter = True
    TextComponent Round_marker
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $"Round " + str(Round)
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    units = from exp settings
Flow
  LoopInitiator IntroLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 0 if (expInfo['skipIntro']) else 1
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    Routine IntroText
    LoopInitiator Presentations loopType="TrialHandler"
      conditionsFile = StudyIntroduction.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Image': 'F1_01', 'min_duration': 2},
        {'Image': 'F2_01', 'min_duration': 5},
        {'Image': 'F2_02', 'min_duration': 2},
        {'Image': 'F2_03', 'min_duration': 2},
        {'Image': 'F2_04', 'min_duration': 2},
        {'Image': 'F3_01', 'min_duration': 2},
        {'Image': 'F3_02', 'min_duration': 2},
        {'Image': 'F3_03', 'min_duration': 2},
        {'Image': 'F3_04', 'min_duration': 2},
        {'Image': 'F3_05', 'min_duration': 2},
        {'Image': 'F3_06', 'min_duration': 5},
        {'Image': 'F4_01', 'min_duration': 2},
        {'Image': 'F4_02', 'min_duration': 2},
        {'Image': 'F4_03', 'min_duration': 2},
        {'Image': 'F5_01', 'min_duration': 2},
        {'Image': 'F5_02', 'min_duration': 5},
        {'Image': 'F5_03', 'min_duration': 2},
        {'Image': 'F5_04', 'min_duration': 2},
        {'Image': 'F5_05', 'min_duration': 2},
        {'Image': 'F5_06', 'min_duration': 2},
        {'Image': 'F5_07', 'min_duration': 2},
        {'Image': 'F6_01', 'min_duration': 2},
        {'Image': 'F6_02', 'min_duration': 2},
        {'Image': 'F6_03', 'min_duration': 2},
        {'Image': 'F6_04', 'min_duration': 2},
        {'Image': 'F6_05', 'min_duration': 5},
        {'Image': 'F7_01', 'min_duration': 2},
        {'Image': 'F7_02', 'min_duration': 2},
        {'Image': 'F7_03', 'min_duration': 2},
        {'Image': 'F7_04', 'min_duration': 5},
        {'Image': 'F8_01', 'min_duration': 5},
        {'Image': 'F9_01', 'min_duration': 5},
        {'Image': 'F10_01', 'min_duration': 2}]
      Routine Presentation
    LoopTerminator Presentations
    Routine Example_Begin
    Routine Example_Snippet
    Routine Example_Question
    Routine Example_Difficulty
    Routine start
  LoopTerminator IntroLoop
  Routine EEG_Start
  Routine startEvent
  LoopInitiator rounds loopType="TrialHandler"
    conditionsFile = loopTemplate1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Round': 1},
      {'Round': 2},
      {'Round': 3}]
    Routine CheckPos
    LoopInitiator calibrationLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 0 if (skip_iter) else 1
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      EyetrackerCalibrationRoutine calibration
      EyetrackerValidationRoutine validation
    LoopTerminator calibrationLoop
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $"conditions/conditions_" + str(Round) + "_"+expInfo['participant'] +  ".xlsx"
      loopType = sequential
      nReps = 0 if (skip_iter) else 1
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      Routine Snippet
      Routine Question
      Routine Difficulty
      Routine Pause
    LoopTerminator trials
    Routine Long_Pause
  LoopTerminator rounds
  Routine End_Study
  Routine EEG_End
  Routine photo
